PsychoPy2experiment version="2026.1.0"
Settings
  expName = Latent Keys
  expVersion = 0.1
  Audio lib = ptb
  End Message = Thank you for your participation!
  runMode = 0
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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  Routine task_trial
    RoutineSettingsComponent task_trial
      desc = The user constructs a key from components.
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    PolygonComponent button_border_0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      fillColor = white
      lineColor = black
      size = 0.16,0.16
      pos = -0.70,-0.38
      shape = rectangle
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    PolygonComponent button_border_1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      fillColor = white
      lineColor = black
      size = 0.16,0.16
      pos = -0.50,-0.38
      shape = rectangle
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    PolygonComponent button_border_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      fillColor = white
      size = 0.16,0.16
      pos = -0.30,-0.38
      shape = rectangle
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    PolygonComponent button_border_3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      fillColor = white
      size = 0.16,0.16
      pos = -0.10,-0.38
      shape = rectangle
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    PolygonComponent button_border_4
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      fillColor = white
      size = 0.16,0.16
      pos = 0.10,-0.38
      shape = rectangle
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    PolygonComponent button_border_5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      fillColor = white
      size = 0.16,0.16
      pos = 0.30,-0.38
      shape = rectangle
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    PolygonComponent button_border_6
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      fillColor = white
      size = 0.16,0.16
      pos = 0.50,-0.38
      shape = rectangle
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    PolygonComponent button_border_7
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      fillColor = white
      size = 0.16,0.16
      pos = 0.70,-0.38
      shape = rectangle
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    ImageComponent center_0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      opacity = 0.0
      size = 0.4,0.4
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    ImageComponent center_1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      opacity = 0.0
      size = 0.4,0.4
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    ImageComponent center_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      opacity = 0.0
      size = 0.4,0.4
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    ImageComponent button_0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = 0.16,0.16
      pos = -0.70,-0.38
      image = assets/sym1.png
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    ImageComponent button_1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = 0.16,0.16
      pos = -0.50,-0.38
      image = assets/sym2.png
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    ImageComponent button_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = 0.16,0.16
      pos = -0.30,-0.38
      image = assets/sym3.png
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    ImageComponent button_3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = 0.16,0.16
      pos = -0.10,-0.38
      image = assets/sym4.png
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    ImageComponent button_4
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = 0.16,0.16
      pos = 0.10,-0.38
      image = assets/sym5.png
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    ImageComponent button_5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = 0.16,0.16
      pos = 0.30,-0.38
      image = assets/sym6.png
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    ImageComponent button_6
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = 0.16,0.16
      pos = 0.50,-0.38
      image = assets/sym7.png
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    ImageComponent button_7
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = 0.16,0.16
      pos = 0.70,-0.38
      image = assets/sym8.png
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    MouseComponent mouse
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
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    KeyboardComponent mri_keys
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      forceEndRoutine = False
      allowedKeys = '1', '2', '3', '4', '6', '7', '8', '9'
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    CodeComponent task_trial_logic
      Code Type = Auto->JS
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      Begin Experiment:
        # Maximum items allowed to be chosen simultaneously
        NUM_ITEMS_TO_SELECT = 3

        # max number of keys, the present hardware keys on the MRI button box
        MASTER_KEYS = ['1', '2', '3', '4', '6', '7', '8', '9']

        NUM_BUTTONS = 8 # Allow using only a subset of buttons, up to len(MASTER_KEYS)


        # Dynamically slice the keys to match the number of active buttons
        ACTIVE_KEYS = MASTER_KEYS[:NUM_BUTTONS]

        # Dynamically build the dictionary mapping key strings back to indices (0 to NUM_BUTTONS-1)
        key_map = {}
        for idx in range(len(ACTIVE_KEYS)):
            key = ACTIVE_KEYS[idx]
            key_map[key] = idx

        # File paths to transparent symbol files
        symbol_files = [
            'assets/sym1.png', 'assets/sym2.png', 'assets/sym3.png', 'assets/sym4.png',
            'assets/sym5.png', 'assets/sym6.png', 'assets/sym7.png', 'assets/sym8.png'
        ]

        # Calculate flat horizontal spacing for 8 buttons across screen width
        # In 'height' units, a normal 16:9 screen width is roughly -0.8 to +0.8
        button_positions = []
        start_x = -0.5
        spacing_x = 0.15
        button_position_y = -0.4
        for i in range(NUM_BUTTONS):
            button_positions.append((start_x + (i * spacing_x), button_position_y))

        border_objects = [button_border_0, button_border_1, button_border_2, button_border_3, button_border_4, button_border_5, button_border_6, button_border_7]
        button_objects = [button_0, button_1, button_2, button_3, button_4, button_5, button_6, button_7]
        center_overlays = [center_0, center_1, center_2]

        # Dynamically update the visual positions of all buttons and borders on screen
        for i in range(NUM_BUTTONS):
            border_objects[i].setPos(button_positions[i])
            button_objects[i].setPos(button_positions[i])

        # Set button size
        button_size = 0.08 # both width and height
        for i in range(NUM_BUTTONS):
            button_objects[i].setSize((button_size,button_size))
            border_objects[i].setSize((button_size,button_size))
            border_objects[i].setLineColor('#222222')
      Begin Routine:
        active_selections = [0] * NUM_BUTTONS

        # safeguard flag to prevent a single continuous mouse click from toggling a button 60 times a second
        mouse_was_pressed = False
      Each Frame:
        # 1. HANDLE INPUT DETECTION (Desktop Mouse vs Scanner Buttons)
        current_click_detected = False
        clicked_idx = -1

        # Check for fMRI button-box inputs
        keys = mri_keys.getKeys(keyList=ACTIVE_KEYS, waitRelease=False)
        if len(keys) > 0:
            clicked_idx = key_map[keys[0].name]
            current_click_detected = True

        # Check for Web/Desktop mouse inputs
        else:
            mouse_buttons = mouse.getPressed()
            if mouse_buttons[0] == 1: # Left mouse button down
                if not mouse_was_pressed: # Only trigger on the initial click frame
                    mouse_was_pressed = True
                    # Check which specific button shape boundary the cursor is inside
                    for i in range(NUM_BUTTONS):
                        if mouse.isPressedIn(button_objects[i]):
                            clicked_idx = i
                            current_click_detected = True
            else:
                mouse_was_pressed = False

        # 2. EVALUATE SELECTION MUTATION RULE
        if current_click_detected and clicked_idx != -1:
            if active_selections[clicked_idx] == 1:
                # Item is currently active: safely deselect it
                active_selections[clicked_idx] = 0
            else:
                # Item is inactive: verify we haven't crossed threshold N before turning on
                if sum(active_selections) < NUM_ITEMS_TO_SELECT:
                    active_selections[clicked_idx] = 1

        # 3. DYNAMICALLY RENDER VISUAL PROPERTIES BASED ON RUNTIME STATE
        active_count = 0
        for i in range(NUM_BUTTONS):
            if active_selections[i] == 1:
                # Highlight outline (increase visual border thickness/contrast)
                border_objects[i].setLineWidth(6)
                border_objects[i].setLineColor('white')

                # Draw selected components mapped onto the giant center stacking zones
                center_overlays[active_count].setImage(symbol_files[i])
                center_overlays[active_count].setOpacity(0.8) # Blend textures transparently
                active_count += 1
            else:
                # Default state properties
                border_objects[i].setLineWidth(2)
                border_objects[i].setLineColor('gray')

        # Hide any remaining center stacking placeholders not currently used
        for j in range(active_count, NUM_ITEMS_TO_SELECT):
            center_overlays[j].setOpacity(0.0)
Flow
  Routine task_trial
